OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=2.2.0)
0x790d75b8 = Yann Renad / Fabien Lotte
0x9f5c4075 = File Replay
0xf6b2e3fa = Motor Imagery
0xf8034a49 = INRIA
Comment
  You can browse each box' documentation by selecting the box and pressing F1
Comment
  Overview

  This scenario allows to quickly replay
  an online session recorded file. The
  main difference between this scenario and
  scenario 3-online is basically
  all the acquisition / stimulation part
  being replaced by a file reader.

  Note: refer to scenario 3-online for
  details about the processing.

Generic stream reader => #0
  Filename = C:/Users/jfs/Desktop/temp/import2.ov
Input stream 1=#0.Output stream 2, Input stream 2=#0.Output stream 3 -> Identity => #1
#1.Output stream 1 -> Reference Channel
  Channel = Fp2
  Channel Matching Method = Smart
-> Channel Selector "C3;P3;C4;P4;Cz"
  Channel List = C3;P3;C4;P4;Cz
  Action = Select
  Channel Matching Method = Smart
-> Spatial Filter "Surface Laplacian"
  Spatial Filter Coefficients = 1;1;1;1;1;1;1;1;1;1
  Number of Output Channels = 2
  Number of Input Channels = 5
  Filter matrix file =
-> Temporal filter
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 8.000000
  High cut frequency (Hz) = 24.000000
  Pass band ripple (dB) = 0.500000
-> Time based epoching => #6
  Epoch 1 duration (in sec) = 1.000000
  Epoch 1 intervals (in sec) = 0.062500
Data=#6, Stimulations=#0.Output stream 3 -> Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
#6 -> Simple DSP
  Equation = x*x
-> Signal average
-> Simple DSP
  Equation = log(1+x)
-> Feature aggregator => #11
Features=#11, Commands=#1.Output stream 2 -> Classifier processor => #12
  Filename to load configuration from = C:/Users/jfs/Desktop/train.cfg
#12.Probability values -> Level measure
